PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = GuessTheSound
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Routines
  Routine Study
    TextComponent Question
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        What is this sound?
    KeyboardComponent key_resp
      allowedKeys = 'enter', 
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextboxComponent ResponseBox
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      padding = None
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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    MouseComponent SubmitClick
      clickable = Submit
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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    TextboxComponent Submit
      anchor = top-center
      bold = True
      borderWidth = 3
      color = black
      editable = False
      letterHeight = 0.03
      padding = None
      pos = [0, -0.4]
      size = [0.15, 0.15]
      startVal [time (s)] = 0.0
      text = Submit
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    TextComponent ClickTheButton
      letterHeight = 0.025
      pos = (0, -0.03)
      startVal [time (s)] = 0.0
      text = Click 'Submit' to begin the next trial.
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    SoundComponent SoundItem
      sound [set every repeat] = $SoundFiles
      startVal [time (s)] = 0.0
      volume = 1.1
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    TextComponent ItemNo
      letterHeight = 0.04
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      text [set every repeat] = $number
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        if trials.thisN == 61: # i.e. trials 0, 1, 2 have been completed
            trials.finished = True # end the loop early
  Routine Count2
    TextComponent no2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 2
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  Routine Count3
    TextComponent no3
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = 3
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  Routine Count1
    TextComponent no1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 1
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        count += 1
        number = str(count) + "/60"
  Routine Welcome
    TextComponent InstructionTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Welcome to 'Guess the Sound!'


        In this task, you will be presented with different environmental sounds one by one. Listen to each sound carefully and try to give it a label so that another person, seeing only your labels, can form an idea of what the sound was like.

        You can leave your answer blank, but please try to label as many items as possible.



        Press the spacebar to continue.
    KeyboardComponent InstructionResp
      allowedKeys = 'space', 
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        count = 0
  Routine VolumeAdjustment
    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Please adjust your volume to a comfortable level.


        Press the spacebar when you are ready to begin.
    SoundComponent Music
      sound = volumeadjust.wav
      startVal [time (s)] = 0.0
      volume = 0.3
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    KeyboardComponent EndAdjustment
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Start
    TextComponent StartTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = We will now begin the task
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  Routine End
    TextComponent ThankyouMssg
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        This is the end of the experiment.



        Thank you for your participation!
Flow
  Routine Welcome
  Routine VolumeAdjustment
  Routine Start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = GuessSounds_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('SoundFiles', 'Initial/Doubled/Bubbles_A.wav'), ('Type', 'Doubled')]),
      OrderedDict([('SoundFiles', 'Initial/Doubled/Chicken_A.wav'), ('Type', 'Doubled')]),
      OrderedDict([('SoundFiles', 'Initial/Doubled/Chime_A.wav'), ('Type', 'Doubled')]),
      OrderedDict([('SoundFiles', 'Initial/Doubled/Clap_A.wav'), ('Type', 'Doubled')]),
      OrderedDict([('SoundFiles', 'Initial/Doubled/Coin_A.wav'), ('Type', 'Doubled')]),
      OrderedDict([('SoundFiles', 'Initial/Doubled/Cricket_A.wav'), ('Type', 'Doubled')]),
      OrderedDict([('SoundFiles', 'Initial/Doubled/Cuckoo_A.wav'), ('Type', 'Doubled')]),
      OrderedDict([('SoundFiles', 'Initial/Doubled/Dog_A.wav'), ('Type', 'Doubled')]),
      OrderedDict([('SoundFiles', 'Initial/Doubled/Doorchime_A.wav'), ('Type', 'Doubled')]),
      OrderedDict([('SoundFiles', 'Initial/Doubled/Piano_A.wav'), ('Type', 'Doubled')]),
      OrderedDict([('SoundFiles', 'Initial/Doubled/Gargle_A.wav'), ('Type', 'Doubled')]),
      OrderedDict([('SoundFiles', 'Initial/Doubled/Siren_A.wav'), ('Type', 'Doubled')]),
      OrderedDict([('SoundFiles', 'Initial/Doubled/Growl_A.wav'), ('Type', 'Doubled')]),
      OrderedDict([('SoundFiles', 'Initial/Doubled/HairDryer_A.wav'), ('Type', 'Doubled')]),
      OrderedDict([('SoundFiles', 'Initial/Doubled/Harp_A.wav'), ('Type', 'Doubled')]),
      OrderedDict([('SoundFiles', 'Initial/Doubled/Laugh_A.wav'), ('Type', 'Doubled')]),
      OrderedDict([('SoundFiles', 'Initial/Doubled/Owl_A.wav'), ('Type', 'Doubled')]),
      OrderedDict([('SoundFiles', 'Initial/Doubled/Windchime_A.wav'), ('Type', 'Doubled')])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
    Routine Count3
    Routine Count2
    Routine Count1
    Routine Study
  LoopTerminator trials
  Routine End
